PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image
      image = img/test.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import time
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo('psychopy_markers', 'Markers', 1, 0.0, 'int32','marker')
        outlet = StreamOutlet(info)
      Each Frame:
        keyPressed = event.getKeys()
        if len(keyPressed) > 0:
            print(str(keyPressed))
            outlet.push_sample([1])
        event.clearEvents(eventType='keyboard')
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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Flow
  Routine trial
