PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import time
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('psychopy_markers', 'Markers', 1, 0.0, 'int32','marker')
        outlet = StreamOutlet(info)
        time.sleep(10)
        outlet.push_sample([1])
        time.sleep(1)
        outlet.push_sample([2])
        time.sleep(1)
        outlet.push_sample([3])
        time.sleep(1)
        outlet.push_sample([4])
        time.sleep(1)
        outlet.push_sample([5])
        time.sleep(1)
        outlet.push_sample([6])
        time.sleep(1)
        outlet.push_sample([7])
        time.sleep(1)
        outlet.push_sample([8])
        time.sleep(1)
        outlet.push_sample([9])
Flow
  Routine trial
